SerialEMSettings
SystemPath	..\SEM-Configs\SEM-Krios-config
ScriptPackagePath	C:\Users\leo\SerialEM\Kriossettings-scripts.txt
CurrentDirectory	
FKeyMapping	2 14
FKeyMapping	3 VarLvlTst
FKeyMapping	4 fkey test
LastDPI	120
CameraControlSet  0  0
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.200000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  1  0
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	1024
Left	1024
Right	3072
Bottom	3072
ExposureTime	0.200000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.001000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  2  0
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.200000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  3  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.450000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	1
FrameTime	0.150000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  4  0
AcquisitionMode	0
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.001000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  0
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.500000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.100000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  0
AcquisitionMode	0
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	1.600000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
DirForFrameSaving 0 C:\cygwin\home\mast\oldE\RawFrames\TVIPS\test
CameraControlSet  0  1
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	2
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	1024
Bottom	1024
ExposureTime	0.030000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  1  1
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	256
Left	256
Right	768
Bottom	768
ExposureTime	0.200000
DriftSettling	0.200000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.001000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  2  1
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	1024
Bottom	1024
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  3  1
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	5
RemoveXrays	0
Binning	1
ShutteringMode	1
Top	0
Left	0
Right	1024
Bottom	1024
ExposureTime	1.280000
DriftSettling	0.400000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	1
FrameTime	0.160000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  4  1
AcquisitionMode	0
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	1024
Bottom	1024
ExposureTime	0.010000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.000000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  1
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	2
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	0
Left	0
Right	1024
Bottom	1024
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.000000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  1
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	5
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	880
Bottom	860
ExposureTime	0.004000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
DirForFrameSaving 1 D:\Frames
CameraControlSet  0  2
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	7420
Bottom	7676
ExposureTime	0.200000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  1  2
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	3
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	1918
Left	1854
Right	5564
Bottom	5756
ExposureTime	0.500000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.025000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  2  2
AcquisitionMode	1
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	2
RemoveXrays	0
Binning	8
ShutteringMode	0
Top	0
Left	0
Right	7420
Bottom	7676
ExposureTime	0.200000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.100000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  3  2
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	7420
Bottom	7676
ExposureTime	2.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	1
FrameTime	0.300000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  4  2
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.075000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  2
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	7420
Bottom	7676
ExposureTime	0.100000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.075000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  2
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	7420
Bottom	7676
ExposureTime	0.400000
DriftSettling	0.000000
LineSync	0
DynamicFocus	1
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.200000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
FilterType	1
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
SummedFrameList 2 2 2 3
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  0  3
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	1.005250
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.100500
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
SummedFrameList 4 4 4 5
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  1  3
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	1024
Left	1024
Right	3072
Bottom	3072
ExposureTime	0.506250
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.003125
AlignFrames	0
SaveFrames	1
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
SummedFrameList 3 6
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  2  3
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.999427
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.203645
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 2 1 0 0 0 0 0
BoostMag 0 0
SummedFrameList 1 11 2 12
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  3  3
AcquisitionMode	0
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.300000
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	1
FrameTime	0.300000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
SummedFrameList 7 5
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  4  3
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	1536
Left	1536
Right	2560
Bottom	2560
ExposureTime	0.009441
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.003147
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  3
AcquisitionMode	0
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	2048
Bottom	2048
ExposureTime	0.223084
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.000000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  3
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	1024
Left	1024
Right	3072
Bottom	3072
ExposureTime	1.013334
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.003147
AlignFrames	0
SaveFrames	1
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
SummedFrameList 1 9 1 15 1 22
UserFrameFracs 0.333333 0.333333 0.333333
UserSubframeFracs 0.200000 0.333333 0.466667
EndControlSet
DirForFrameSaving 3 C:\cygwin\home\mast\oldE\RawFrames\OneView
CameraControlSet  0  4
AcquisitionMode	0
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	8
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.359500
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
DEsumCount	2
FilterType	0
ChannelIndex 0 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  1  4
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	1536
Left	1536
Right	2560
Bottom	2560
ExposureTime	0.297554
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.075000
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
DEsumCount	2
FilterType	0
ChannelIndex 2 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  2  4
AcquisitionMode	1
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.099500
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.033333
AlignFrames	0
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	0
DEsumCount	1
FilterType	0
ChannelIndex 1 0 -1 -1 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  3  4
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	1
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	1.800576
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	1
SumK2Frames	0
DoseFracMode	1
FrameTime	0.050000
AlignFrames	0
SaveFrames	1
UseFrameAlign	1
FAParamSetInd	0
DEsumCount	1
FilterType	0
ChannelIndex 1 -1 -1 -1 0 0 0 0
BoostMag 1 1
SummedFrameList 8 8
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  4  4
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	1536
Left	1536
Right	2560
Bottom	2560
ExposureTime	0.039500
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.040000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
DEsumCount	1
FilterType	0
ChannelIndex 0 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  4
AcquisitionMode	1
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	2048
Bottom	2048
ExposureTime	0.080900
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.000000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
DEsumCount	2
FilterType	0
ChannelIndex 0 -1 -1 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  4
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	1024
Left	1024
Right	3072
Bottom	3072
ExposureTime	0.479500
DriftSettling	0.000000
LineSync	0
DynamicFocus	1
CorrectDrift	0
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.120000
AlignFrames	0
SaveFrames	16
UseFrameAlign	0
FAParamSetInd	0
DEsumCount	1
FilterType	0
ChannelIndex 0 1 2 3 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  0  5
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	4096
Bottom	4096
ExposureTime	0.202398
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.013316
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  1  5
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	2046
Left	2880
Right	4096
Bottom	4096
ExposureTime	0.532625
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.013316
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 0 0 0 0 0 0
BoostMag 2 1
EndControlSet
CameraControlSet  2  5
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	11520
Bottom	8184
ExposureTime	1.001335
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	1.000000
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
DEsumCount	2
FilterType	0
ChannelIndex 0 -1 -1 -1 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  3  5
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	2
ShutteringMode	0
Top	0
Left	0
Right	11520
Bottom	8184
ExposureTime	0.998669
DriftSettling	0.000000
LineSync	0
DynamicFocus	1
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	1
FrameTime	0.099867
AlignFrames	1
SaveFrames	0
UseFrameAlign	1
FAParamSetInd	1
DEsumCount	2
FilterType	0
ChannelIndex -1 -1 2 -1 0 0 0 0
BoostMag 0 0
SummedFrameList 8 142 2 143
UserFrameFracs 1.000000
UserSubframeFracs 1.000000
EndControlSet
CameraControlSet  4  5
AcquisitionMode	0
Processing	2
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	4
ShutteringMode	0
Top	0
Left	0
Right	2048
Bottom	2048
ExposureTime	0.106525
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.013316
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 0 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  5  5
AcquisitionMode	1
Processing	0
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	4
RemoveXrays	0
Binning	16
ShutteringMode	0
Top	0
Left	0
Right	2048
Bottom	2048
ExposureTime	0.199734
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	0
SumK2Frames	0
DoseFracMode	0
FrameTime	0.006658
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
FilterType	0
ChannelIndex 0 -1 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
CameraControlSet  6  5
AcquisitionMode	1
Processing	1
DarkReferenceEveryTime	0
AverageDarkReference	0
TimesToAverageDarkRef	10
RemoveXrays	0
Binning	8
ShutteringMode	0
Top	0
Left	0
Right	11520
Bottom	8184
ExposureTime	0.202398
DriftSettling	0.000000
LineSync	0
DynamicFocus	0
CorrectDrift	-1
K2ReadMode	1
SumK2Frames	0
DoseFracMode	0
FrameTime	0.039947
AlignFrames	0
SaveFrames	0
UseFrameAlign	0
FAParamSetInd	0
DEsumCount	2
FilterType	0
ChannelIndex 0 -1 0 0 0 0 0 0
BoostMag 0 0
EndControlSet
FrameNameData 5912 0 0 5 4
DirForK2Frames C:\cygwin\home\mast\oldE\RawFrames\K2
DirForDEFrames dir1
DirForFalconFrames test1/subtest
FrameBaseName test3
NumberedFrameFolder junk
NumberedFramePrefix junk1
DEAutosaveFormat	1
PercentDisplayTruncationLo	0.090000
PercentDisplayTruncationHi	1.000000
ProtectRecordImages	0
MontageUseContinuous 0 0.200000
MontageNoDriftCorr 1 0
MontageFilterOptions 0 0 0 0
TIFFcompression	5
HDFcompression	1
FileOptionsPctTruncLo	0.200000
FileOptionsPctTruncHi	0.200000
SingleFileOptions 0 7 0.200000 0.500000
AutofocusEucenAbsParams -0.008749 0.008749 -10.000000 10.000000 0 1
AreaFractionForScaling	1.000000
FFTTruncDiameter	0.005000
FFTBackgroundGray	24
UseViewForSearch	0
UseRecordForMontage	0
SettingsFixedForIACal	0
IdleScriptInterval	60
BasicMode	0
ReverseWheelZoom	0
OneK2FramePerFile	0
SkipK2FrameRotFlip	0
SaveK2FramesAsTiff	1
SaveRawPacked	0
SaveTimes100	0
SaveUnnormedFrames	1
Use4BitMRCMode	0
SaveSuperResReduced	0
TakeK3SuperResBinned	0
UseK3CDS	0
DynFocusTiltOffset	0.000000
NameFramesAsMRCS	0
SaveFrameStackMdoc	0
AntialiasBinning	1
NumFrameAliLogLines	1
SaveInEERformat	0
BuffersToRollOnAcquire	5
BufferToReadInto	7
FifthCopyToBuf	8
Antialias	1
FixedZoomSteps	1
DrawScaleBar	192
DrawCrosshairs	1
DrawTiltAxis	0
MontageCorrectDrift	1
MontageAdjustFocus	0
MontageFocusAfterStage	0
MontageShowOverview	1
MontageAlignPieces	1
MontageVerySloppy	1
MontageEvalPeaks	0
MontageMinimumCounts	0
MontGridMapCutoffInvUm	0.250000
MontGridMapMinSizeMm	0.650000
MontageUseMontMap	1
MontageUseViewInLD	1
MontageUseSearchInLD	0
MontageUseMultishot	0
MontageUseHQparams	0
MontageFocusInBlocks	1
MontageImShiftInBlocks	0
MontBlockShiftLimit	12.000000
MontBlockLMShiftLimit	12.000000
MontageRepeatFocus	0
MontageDriftLimit	2.000000
MontageRealign	0
MontageISRealign	0
MontageMaxRealignIS	3.000000
MontageUseAnchor	0
MontageAnchorMagInd	17
MontageSkipCorrelations	0
MontageSkipReblanks	0
MontageFocusBlockSize	3
MontageRealignInterval	8
MontageMinOverlapFactor	0.100000
MontageMinMicronsOverlap	0.100000
MontageHQdelayTime	0.000000
MontageMaxAlignFrac	0.200000
MontageCloseFile	0
SelectedCameraParameterSet	3
MonospacedLog	0
SaveLogAsRTF	0
AutoPruneLogLines2	2500
TargetDefocus	-2.000000
AutofocusOffset	0.000000
RefocusThreshold	7.000000
AbortThreshold	8.000000
AutofocusBeamTilt	2.000000
LMBeamTilt	5.000000
BeamTiltDirection	0
MinDDDfocusBinning	4
DriftProtection	1
FocusVerbose	0
TiltIncrement	2.000000
CosineTilting	0
ShiftToTiltAxis	0
ApplyISoffset	0
UsePiezoForLDAxis	0
AdjustFocusForProbe	1
NormalizeAllOnMagChange	0
IdleTimeToCloseValves	0
IdleTimeToStopEmission	0
NormAutofocusViaView	0
SkipBlankingInLowDose	0
TrimBordersInAutoalign	1
ErasePeriodicPeaks	0
DisableAutoTrim	0
MoveStageOnBigMouseShift	1
BacklashMouseAndISR	1
MouseStageThreshold	0.700000
MouseStageAbsoluteThreshold	3.000000
TiltDelay	2.000000
RDCthreshFor2ndShot	0.100000
MacroLimitRuns	0
MacroLimitScaleMax	0
MacroLimitTiltUp	0
MacroLimitTiltDown	0
MacroLimitMontError	0
MacroLimitIS	0
MacroRunLimit	500
MacroScaleMaxLimit	50
MacroTiltUpLimit	80.000000
MacroTiltDownLimit	-80.000000
MacroMontErrorLimit	1.000000
MacroISLimit	10.000000
NumCamMacRows	1
NumStatusLines	0
ScriptIndentSize	3
ScriptUseMonoFont	1
ShowIndentButtons	1
RestoreMacroEditors	1
MonospaceStatusLines	0
KeepOneLineFocus	1
ZbyGMaxTotalChange	100
ZbyGIterThreshold	0.500000
ZbyGUseViewInLD	1
MultishotPatternType	2
MultishotRunScript	0
MultishotScriptToRun	0
CircleOnLiveFFT	0
SideBySideFFT	0
AutoSingleFFT	1
PhasePlateShift	0.000000
ImageReductionFac	2.000000
FixedRingDefocus	-0.000000
UserMaxCtfFitRes	5.000000
MinCtfFitResIfPhase	20.000000
ClickUseCtfplotter	0
TuneUseCtfplotter	0
CtfExpectedPhase	90
AutosaveSettings	0
AutosaveNavNew	0
SaveAutosaveLog	0
SkipFileDlg	0
AutosaveLog	1
AutosaveXYZ	0
PostBidirReturnDelay	0
StageMoveToolImage	1
LoadMapsUnbinned	0
WriteNavAsXML	0
TryRealignScaling	1
PlusMinusRIScaling	0
PointLabelDrawThresh	6
UseLabelInFilenames	0
MultiShotEnable	3
RotAlignDoSearch	1
RotAlignRange	10.000000
GridGroupSize	7.000000
DivideGridIntoGroups	0
RIuseCurrentLDparams	0
SkipMontFitDlgs	1
CurAcqParamIndex	1
MarkShftSaveType	1
MarkShftApplyWhich	1
ReverseAutocontColors	0
KeepColorsForPolygons	0
RIErasePeriodicPeaks	0
ShowStateNumbers	1
ShowTableIndexes	1
CameraDivide16BitBy2	0
ExtraDivideBy2	0
AcquireFloatImages	0
InterpolateDarkRefs	1
NoNormOfDSDoseFrac	0
ComPathIsFramePath	0
IgnoreHigherGainRefs	0
UseOlderBinned2Ref	0
DMgainRefAskPolicy	0
GainRefCalibrateDose	0
LowDoseBlankWhenDown	0
LowDoseNormalizeBeam	0
LowDoseViewDefocus	-200.000000
LowDoseSearchDefocus	-100.000000
LDAutoShiftMaxPctChg	-1.000000
LDAutoShiftMaxRot	-1.000000
LDAutoViewMaxShift	-0.250000
LDAutoSearchMaxShift	-0.300000
LowDoseTieFocusTrial	0
LowDoseRotateAxis	0
TieFocusTrialPos	0
LowDoseAxisAngle	-27
WalkUpTargetAngle	-60.000000
WalkUpMaxInterval	8.000000
WalkUpMinInterval	3.000000
WalkSTEMfocusInterval	19.000000
ResetRealignUseTrialInLowDose	0
FineEucenUseTrialInLowDose	0
RoughEucenUseSearchIfInLM	1
AutoSetAxisOffset	0
WalkupUseViewInLowDose	0
TasksUseViewNotSearch	0
ComplexTasksVerbose	0
UseEasyAutocen	0
AutoCenIterate	0
AutoCenIterThresh	0.100000
AutoCenUseMagInd	0
UsersAstigTilt	-1.000000
MenuZemlinTilt	6.000000
UsersComaTilt	10.000000
CtfExposure	1.200000
CtfDriftSettling	0.100000
CtfBinning	2
CtfUseFullField	0
NumCtfFrames	6
AlignParamSetNum	2
CtfUseFocusInLD	1
CtfDoFullArray	0
ComaIterationThresh	1.000000
ComaVsISextent	2.000000
ComaVsISrotation	0
ComaVsISuseFullArray	0
MinCtfBasedDefocus	-0.220000
AddToMinForAstigCTF	-0.550000
TiltSeriesLastStartingTilt	0.000000
TiltSeriesTrackLowMag	0
TiltSeriesTrackAfterFocus	0
TiltSeriesBeamControl	0
TiltSeriesMeanCounts	5000
TiltSeriesCosinePower	3.000000
TiltSeriesTaperCounts	0
TiltSeriesHighCounts	4000
TiltSeriesTaperAngle	50.000000
TiltSeriesLimitIntensity	0
TiltSeriesRefineEucentricity	0
TiltSeriesWalkLeaveAnchor	0
TiltSeriesWalkAnchorTilt	4.000000
TiltSeriesLeftAnchorBuffer	15
TiltSeriesImageShiftLimit	5.000000
TiltSeriesFocusCheckInterval	5.000000
TiltSeriesRepeatRecord	0
TiltSeriesConfirmLDRepeat	0
TiltSeriesMaxRecordLoss	0.025000
TiltSeriesStopOnBigShift	0
TiltSeriesMaxAlignShift	25.000000
TiltSeriesRepeatAutofocus	1
TiltSeriesMaxFocusDiff	0.200000
TiltSeriesAlwaysFocusAtHigh	0
TiltSeriesAlwaysFocusAngle	50.000000
TiltSeriesSkipAutofocus	0
TiltSeriesCheckAutofocus	0
TSLimitFocusChange	1
TSFocusChangeLimit	20.000000
TiltSeriesMinFocusAccuracy	0.250000
TiltSeriesRefineZLP	0
TiltSeriesZLPInterval	15
TiltSeriesCenterBeam	0
TiltSeriesCloseValvesAtEnd	0
TiltSeriesAlignTrackOnly	0
TiltSeriesPreviewBeforeNewRef	0
TiltSeriesMaxRefDisagreement	0.050000
TiltSeriesMaxPredictErrorXY	0.015000
TiltSeriesMaxPredictErrorZ	0.200000
TiltSeriesMaxPredictErrorZSN	0.130000
TiltSeriesMaxPredictErrorZSM	1.000000
TiltSeriesCenBeamPeriodically	0
TiltSeriesCenBeamInterval	60
TiltSeriesCenBeamAbove	0
TiltSeriesCenBeamAngle	10.000000
TiltSeriesStackRecords	1
TSWaitForDrift	0
TSOnlyWaitAboveBelow	0
TSWaitAboveAngle	45.000000
TSWaitBelowAngle	30.000000
TSWaitAtReversals	0
TSWaitDosymIgnore	0
TSDoEarlyReturn	0
TSNumEarlyFrames	3
TiltSeriesStackBinSize	512
TiltSeriesExtraSetExposure	0
TiltSeriesExtraSetSpot	0
TiltSeriesExtraSpotSize	2
TiltSeriesExtraDeltaIntensity	1.000000
TiltSeriesExtraDrift	0.000000
TiltSeriesExtraSetBinning	1
TiltSeriesExtraBinIndex	1
TiltSeriesDoVariations	0
TiltSeriesChangeRecExposure	1
TiltSeriesChangeAllExposures	0
TiltSeriesChangeSettling	0
TSMakeLowTiltMap	0
TSFilterLowTiltMap	0
TSMapFilterRadius2	0.250000
TSMapFilteSigma2	0.040000
TSTiltDelay	0.000000
TiltSeriesExposureStep	1.100000
ExposureSeriesFixNumFrames	0
TiltSeriesTiltFailPolicy	0
TiltSeriesLDDimRecordPolicy	0
TiltSeriesTermNotAskOnDim	1
TiltSeriesLDRecordLossPolicy	2
TiltSeriesAutoTerminatePolicy	1
TSSeparateExtraRec	1
TiltSeriesAutoSavePolicy	1
TSCallPlugins	0
TSFixedNumFrames	1
TSSkipBeamShiftOnAlign	0
TSAllowContinuous	0
EmailAfterTiltSeries	0
ReorderDoseSymFile	1
FilterSlitWidth	10.000000
FilterEnergyLoss	2000.000000
FilterZeroLoss	0
FilterChangeMagWithScreen	0
FilterMatchPixel	1
FilterMatchIntensity	1
FilterDoMagShifts	0
RefineZLPWithTrial	0
STEMmatchPixel	1
ScreenSwitchSTEM	0
InvertSTEMimages	0
BlankBeamInSTEM	0
RetractToUnblankSTEM	0
KeepPixelTime	0
RightBorderFrac	0.000000
BottomBorderFrac	0.005051
MainFFTsplitFrac	0.559932
AutoBacklashNewMap 0 3.000000
NavCollapseGroups	1
MultiShotParams 0.580000 0.380000 2 0 1 4 0 0.330000 0 1 2 0 0.500000 -1.631160 -2.340490 -2.263700 1.619350 2 2 17 24 0 0 3 0.250000 -0.000437 -20.999617 -999.000000
MultiHexParams 0 1 -1.631160 -2.340490 -2.263700 1.619350 0.000000 0.000000 17 0.006448 1
StepAdjustParams 2 0 -1 0 -10 1 0 0 1.000000 0.500000 0 1.000000
HoleAdjustXform -17 -17 0 18 29 1.001640 0.003582 -0.000313 0.998307 200
CustomHoleX -5.566204 -12.036885 -4.482701
CustomHoleY 5.287480 -3.035682 -8.126052
HoleFinderParams 2.100000 1.000000 0 126.307274 466.750458 123.523422 0.207071 1 0 0 0 0.620000 0.300000 0.000000 0
HoleFiltSigmas 2.400000 -2.000000
HoleEdgeThresholds 4.000000
HoleCombinerParams 2 0 1 0 2 0
AutoContParams 200 2.000000 0 1.000000 70.000000 0.750000 0.000000 0 5 0 68.769714 84.051880 19.503435 52.756329 -6.400000 0.000000 0
DriftWaitParams 1 0.500000 1 4.000000 16.000000 0 1 0.100000 4 0 0 0.500000
NavAcquireParams	0
AcquireParams1 0 0 0 1 0 1 14 0 0 14 1 14 0 0 0 0 1 0 14 0 0 1 0 1 14 1 1
AcquireParams2 1 -2.000000 -1.000000 10 0 0 1 1 0 14 0.000000 0 1 0 0 0 0 0 0 0 0 0 1 0 0 4 -4 5 0
NavAcqAction0 0 0 1 15 40.000000 
NavAcqAction1 5 0 1 15 40.000000 
NavAcqAction2 1153 0 1 15 40.000000 
NavAcqAction3 129 0 1 15 40.000000 
NavAcqAction4 0 0 1 15 40.000000 
NavAcqAction5 1 0 1 15 40.000000 
NavAcqAction6 65 0 1 15 40.000000 nearby
NavAcqAction7 1 0 1 15 40.000000 
NavAcqAction8 1 0 1 15 40.000000 
NavAcqAction9 3 0 1 15 40.000000 
NavAcqAction10 512 3 1 120 40.000000 
NavAcqAction11 129 0 1 15 40.000000 
NavAcqAction12 385 0 1 15 40.000000 
NavAcqAction13 3 0 1 15 40.000000 
NavAcqAction14 128 0 1 15 40.000000 
NavAcqAction15 16 0 1 15 40.000000 
NavAcqAction16 514 0 1 15 40.000000 
NavAcqAction17 769 0 1 15 40.000000 
NavAcqAction18 1297 0 1 15 40.000000 
NavAcqAction19 2 0 1 15 40.000000 
NavAcqAction20 18 0 1 15 40.000000 
NavAcqAction21 2 0 1 15 40.000000 
NavAcqAction22 2 0 1 15 40.000000 
NavAcqAction23 2 0 1 15 40.000000 
NavAcqAction24 2 0 1 15 40.000000 
ActionOrder 17 16 7 8 9 10 13 0 5 1 2 3 4 12 6 11 19 14 21 20 15 18 22 23 24
EndNavAcquireParams
NavAcquireParams	1
AcquireParams1 0 0 0 1 0 1 1 0 0 14 0 14 0 0 0 0 1 0 1 0 0 0 3 0 1 1 1
AcquireParams2 0 -3.000000 -2.000000 10 0 0 1 1 0 12 0.000000 0 1 0 0 0 1 0 0 0 0 0 1 0 1 4 -2 2 1
NavAcqAction0 0 4 1 15 40.000000 
NavAcqAction1 97 3 1 20 40.000000 Carbon
NavAcqAction2 1153 0 1 15 40.000000 
NavAcqAction3 129 0 1 15 40.000000 
NavAcqAction4 0 0 1 15 40.000000 
NavAcqAction5 1 1 1 15 40.000000 
NavAcqAction6 1 1 1 15 40.000000 
NavAcqAction7 1 3 1 120 40.000000 
NavAcqAction8 1 1 1 15 40.000000 
NavAcqAction9 3 0 1 15 40.000000 
NavAcqAction10 512 3 1 240 40.000000 
NavAcqAction11 129 0 1 15 40.000000 
NavAcqAction12 385 0 1 15 40.000000 
NavAcqAction13 3 0 1 15 40.000000 
NavAcqAction14 128 0 1 15 40.000000 
NavAcqAction15 16 0 1 15 40.000000 
NavAcqAction16 514 0 1 15 40.000000 
NavAcqAction17 769 0 1 15 40.000000 
NavAcqAction18 1297 0 1 15 40.000000 
NavAcqAction19 2 0 1 15 40.000000 
NavAcqAction20 2 0 1 15 40.000000 
NavAcqAction21 2 0 1 15 40.000000 
NavAcqAction22 2 0 1 15 40.000000 
NavAcqAction23 2 0 1 15 40.000000 
NavAcqAction24 2 0 1 15 40.000000 
ActionOrder 17 16 7 8 9 10 13 0 5 1 2 3 4 12 11 14 6 15 18 19 20 21 22 23 24
EndNavAcquireParams
NavAlignParams 18 1.000000 2 0.200000 0 -1.000000 -1.000000 0.500000 21 0
NavAliMapLabel newhole
MarkerShift 7 30 -0.501819 -1.482752
DewarVacParams 1 0 60 0 60 0 4.000000 0 1.000000 0 15.000000 5.000000 1
CookerParams 20 1 0.690000 200 1 0.300000 1 1 50.000000 -999 -999
VppConditionParams -1 3 0.500000 -999 1 100 5 0 2 0 0 3 -999 -999
VppCondNavText VPPC
SnapshotParams 0 2.000000 1 0.000000 0 3 80 0 -999 -999
MultiGridParams 1 1 1 2 0 0 150 1 3 3 1 10 0 0 1 0 0 1 2 2 0 0 0 0 1 0 0
MGLMMstate 15 LM not LD
MGREFstate 0 
CtfAcqSetFlags 29
MGSessionFile C:\Users\mast\Images\navtests\multiGrid_May31_1-full.adoc
AutocenterParams 2 25 5 0.539237 2 0.300000 0 1 1 1.000000 0.000000 0.000000 -999
AutocenterParams 2 26 4 0.475578 2 0.126000 0 1 1 1.000000 0.000000 0.000000 -999
AutocenterParams 2 26 5 0.538997 2 0.300000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams 2 19 4 0.587451 8 0.100000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 2 24 5 0.524848 4 0.300000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 24 5 0.542867 4 0.200000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 31 5 0.443847 4 0.050000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 2 24 4 0.587451 8 0.500000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 29 3 0.482505 4 0.500000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams 2 25 5 0.555009 8 0.800000 0 0 1 0.000000 0.599668 -0.000000 -999
AutocenterParams 0 23 4 0.727314 4 0.125000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 22 4 0.727314 4 0.125000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 21 4 0.727314 4 0.125000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 20 4 0.727314 4 0.125000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 20 3 0.747778 4 0.092000 0 0 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 20 3 0.526182 4 0.050000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams -1 24 20 -1.000000 4 0.200000 0 1 0 0.000000 0.000000 0.000000 -999
AutocenterParams 0 20 5 0.727314 4 0.192000 0 0 0 0.000000 0.000000 0.000000 -999
ZbyGParams 1 24 0.485534 4 1 2 -6.000000 1.700000 15.201813 -0.274137 -999
ZbyGParams 0 17 0.685065 4 1 2 -30.000000 3.000000 -60.040642 -0.294137 -999
ZbyGParams 0 20 0.543164 3 1 0 0.000000 1.700000 -0.642869 -0.000142 -999
ComaVsISCal 32 7 0 -999 0 0.454813 -0.366805 -0.096739 -0.057213 0.243252 0.009000 -0.015800 -0.021200 -0.038800
RangeFinderParams 0 0 0 0 1 54.000000 5600.000000 2.000000 0 -999 -999
RangeFinderParams 1 0 0 0 0 50.000000 60.000000 2.000000 0 -999 -999
ImportOverlayChannels 120
ProcessOverlayChannels ABA
CtffindParams 1 1 1 1 2.500000 0 0 -30 131
ToolDialogStates2 1 1 1 3 1 0 1 1 1 0 3 5 0 0 0 0
ToolDialogPlacement 11 806 774 1115 1000
MacroButtonNumbers 1 26 13
MoreScriptButtons  3 4 5 6 7 8 9 10 11
RemoteControlParams 1 0.006250 1.000090 1 3 0 3
WindowPlacement	1
-1 -1 -1 -1 12 0 1468 1000
LogPlacement 1 1 -1 -1 -1 -1 869 52 1600 808
SecondaryLogPlacement 1 1 -1 -1 -1 -1 564 433 1442 911
NavigatorPlacement 0 1 -1 -1 -1 -1 608 233 1254 1025
MeterPlacement 0 1 -1 -1 -1 -1 304 764 499 864
DosePlacement 0 1 -1 -1 -1 -1 299 794 499 902
StatePlacement 0 1 -1 -1 -1 -1 1184 133 1600 880
RotAlignPlacement 0 1 -1 -1 -1 -1 964 69 1600 370
MultiShotPlacement 0 1 -1 -1 -1 -1 1139 203 1600 1000
ReadDlgPlacement 0 1 -1 -1 -1 -1 0 59 291 218
StageToolPlacement 0 1 -1 -1 -1 -1 27 189 253 490
CtffindPlacement 0 1 -1 -1 -1 -1 0 0 472 400
AutocenPlacement 0 1 -1 -1 -1 -1 1209 255 1600 902
VppCondPlacement 0 1 -1 -1 -1 -1 905 59 1369 624
ZbyGSetupPlacement 0 1 -1 -1 -1 -1 804 229 1229 895
NavAcqPlacement 0 1 -1 -1 -1 -1 302 0 1293 1000
SnapshotPlacement 0 1 -1 -1 -1 -1 0 0 349 411
HoleFinderPlacement 0 1 -1 -1 -1 -1 1205 147 1600 1000
MultiCombinerPlacement 0 1 -1 -1 -1 -1 1134 714 1600 1000
AutoContPlacement 0 1 -1 -1 -1 -1 1434 85 1920 1000
MultiGridPlacement 0 1 -1 -1 -1 -1 872 246 1920 1200
MacroToolPlacement 0 1 -1 -1 -1 -1 1329 9 1465 638
OneLinePlacement 0 1 -1 -1 -1 -1 550 673 1120 1000
OneEditerPlacement 0 0 1 -1 -1 -1 -1 1179 164 1600 764
OneEditerPlacement 1 0 1 -1 -1 -1 -1 945 564 1419 902
OneEditerPlacement 2 0 1 -1 -1 -1 -1 626 662 1100 1000
OneEditerPlacement 3 0 1 -1 -1 -1 -1 626 662 1100 1000
OneEditerPlacement 4 0 1 -1 -1 -1 -1 20 160 374 649
OneEditerPlacement 5 0 1 -1 -1 -1 -1 20 160 374 649
OneEditerPlacement 6 0 1 -1 -1 -1 -1 1249 409 1600 769
OneEditerPlacement 7 0 1 -1 -1 -1 -1 983 284 1600 1000
OneEditerPlacement 8 0 1 -1 -1 -1 -1 1164 409 1514 902
OneEditerPlacement 9 0 1 -1 -1 -1 -1 834 0 1600 902
OneEditerPlacement 10 0 1 -1 -1 -1 -1 655 0 1600 902
OneEditerPlacement 11 0 1 -1 -1 -1 -1 983 284 1600 1000
OneEditerPlacement 12 0 1 -1 -1 -1 -1 834 102 1600 1000
OneEditerPlacement 13 0 1 -1 -1 -1 -1 443 88 1223 713
OneEditerPlacement 14 0 1 -1 -1 -1 -1 695 375 1476 1000
OneEditerPlacement 15 0 1 -1 -1 -1 -1 810 244 1389 902
OneEditerPlacement 16 0 1 -1 -1 -1 -1 449 0 1394 902
OneEditerPlacement 17 0 1 -1 -1 -1 -1 629 254 1600 902
OneEditerPlacement 18 0 1 -1 -1 -1 -1 634 0 1580 902
OneEditerPlacement 19 0 1 -1 -1 -1 -1 819 375 1600 1000
OneEditerPlacement 20 0 1 -1 -1 -1 -1 909 119 1600 839
OneEditerPlacement 21 0 1 -1 -1 -1 -1 834 0 1600 902
OneEditerPlacement 22 0 1 -1 -1 -1 -1 779 0 1545 902
OneEditerPlacement 23 0 1 -1 -1 -1 -1 834 0 1600 902
OneEditerPlacement 24 0 1 -1 -1 -1 -1 627 375 1408 1000
OneEditerPlacement 25 0 1 -1 -1 -1 -1 655 0 1425 902
OneEditerPlacement 26 0 1 -1 -1 -1 -1 655 0 1425 902
OneEditerPlacement 27 0 1 -1 -1 -1 -1 654 0 1600 902
OneEditerPlacement 28 0 1 -1 -1 -1 -1 832 98 1598 1000
OneEditerPlacement 29 0 1 -1 -1 -1 -1 834 0 1600 902
OneEditerPlacement 30 0 1 -1 -1 -1 -1 654 0 1600 902
OneEditerPlacement 31 0 1 -1 -1 -1 -1 1005 20 1600 902
OneEditerPlacement 32 0 1 -1 -1 -1 -1 834 0 1600 902
OneEditerPlacement 33 0 1 -1 -1 -1 -1 1005 20 1600 902
OneEditerPlacement 34 0 1 -1 -1 -1 -1 419 0 1284 902
OneEditerPlacement 35 0 1 -1 -1 -1 -1 739 0 1600 902
OneEditerPlacement 36 0 1 -1 -1 -1 -1 419 0 1284 902
OneEditerPlacement 37 0 1 -1 -1 -1 -1 830 99 1600 1000
OneEditerPlacement 39 0 1 -1 -1 -1 -1 269 24 889 499
OneEditerPlacement 40 0 1 -1 -1 -1 -1 980 93 1600 568
OneEditerPlacement 54 0 1 -1 -1 -1 -1 40 75 484 902
OneEditerPlacement 58 0 1 -1 -1 -1 -1 337 177 864 1000
OneEditerPlacement 59 0 1 -1 -1 -1 -1 337 177 864 1000
MacroToolbarButtons 20 0
StateParameters 0 2 17 4 0.539392 0 0.000000 10.000000 0 2 3710 3838 1.250000 0.000000 0 0 1 0.250000 1 1 1 0 1 0 1 1 1 1 1 1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -1 2 0 0 0.000000 0 0.000000 0.000000 0 2 3708 3838 0.400000 0.000000 0 1 1 0.040000 0 0 2 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 1 Name1
StateParameters -5 2 0 0 0.000000 0 0.000000 0.000000 0 4 928 960 0.100000 0.000000 0 1 1 0.075000 0 0 1 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -4 2 0 0 0.000000 0 0.000000 0.000000 0 2 3710 3838 0.900000 0.000000 0 1 0 0.300000 1 1 2 0 2 2 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -1 2 0 0 0.000000 0 0.000000 0.000000 0 4 928 960 0.100000 0.000000 0 1 1 0.075000 0 0 1 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -5 0 0 0 0.000000 0 0.000000 0.000000 0 2 1024 512 0.650000 0.000000 0 1 1 0.040000 0 0 2 0 0 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 5 Name2
StateParameters -1 0 0 0 0.000000 0 0.000000 0.000000 0 3 684 682 0.300000 0.000000 0 1 1 0.040000 0 0 2 0 0 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 6 LM
StateParameters -4 0 0 0 0.000000 0 0.000000 0.000000 0 1 4096 4096 1.400000 0.000000 0 1 0 0.040000 0 0 2 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 7 LMM
StateParameters -1 1 0 0 0.000000 0 0.000000 0.000000 0 3 341 170 0.020000 0.000000 0 0 1 0.030000 0 0 0 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters 0 2 39 5 0.801222 0 0.000000 15.000000 0 1 7420 7676 0.500000 0.000000 0 2 0 0.040000 0 0 2 0 1 0 1 1 1 1 1 1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters 0 2 20 4 0.535290 0 0.000000 15.000000 0 4 1848 1916 1.000000 0.000000 0 1 1 0.200000 0 1 1 0 1 0 0 0 0 1 1 2 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 10 magoo
StateParameters -4 2 0 0 0.000000 0 0.000000 0.000000 0 8 924 958 0.500000 0.000000 0 1 0 0.200000 0 1 1 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateName 11 mister
StateParameters -2 2 0 0 0.000000 0 0.000000 0.000000 0 4 928 960 0.500000 0.000000 0 1 1 0.025000 0 0 1 0 0 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -3 2 0 0 0.000000 0 0.000000 0.000000 0 8 924 958 0.500000 0.000000 0 1 1 0.100000 0 0 2 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -9999.000000 -9999.000000 0.000000 0
StateParameters -5 0 0 0 0.000000 0 0.000000 0.000000 0 2 2048 2048 0.500000 0.000000 0 1 1 0.040000 0 0 2 0 1 0 -1 -1 -1 -1 -1 -1 -999 -9999.000000 -110.000000 -9999.000000 528989.125000 0
StateName 14 S
StateParameters 0 0 7 4 0.818801 0 2000.000000 10.000000 0 4 1024 1024 0.150000 0.000000 0 1 1 0.100000 0 0 0 0 2 2 1 1 1 1 1 1 -999 -9999.000000 -9999.000000 -9999.000000 -431602080.000000 0
StateName 15 LM not LD
StateParameters 0 0 24 3 0.693265 0 2000.000000 10.000000 0 1 4096 4096 0.031250 0.000000 0 1 1 0.100000 0 0 0 0 2 2 1 1 1 1 1 1 -999 -9999.000000 -9999.000000 -9999.000000 -431602080.000000 0
StateName 16 HM not LD
LowDoseParameters 0 19 3 0.543164 0.000000 0 0 15.000000 0.000000 0 0.051349 -0.435649 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 1 24 3 0.526182 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 2 24 3 0.526182 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 3 30 4 0.727314 0.000000 0 1 15.000000 20.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 0 0 0.000000 0.000000 0.000000
LowDoseParameters 4 5 4 0.818801 0.000000 0 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 0 19 3 0.586634 0.000000 1 0 15.000000 0.000000 0 -0.002815 -0.009652 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 1 29 3 0.482505 -5.890929 1 1 20.000000 0.000000 0 -0.002068 0.016841 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 2 29 3 0.482505 -5.890929 1 1 20.000000 0.000000 0 -0.002068 0.016841 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 3 33 3 0.480971 0.000000 1 1 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 4 17 3 0.400000 0.000000 1 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 0 26 2 0.114201 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 1 31 1 0.114201 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 2 31 1 0.114201 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 3 31 1 0.114201 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters 4 0 0 0.000000 0.000000 2 0 0.000000 0.000000 0 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 1 0 0.000000 0.000000 100.000000
LowDoseParameters -2 18 4 0.544508 0.000000 0 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -3 8 3 0.766494 -0.121767 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -4 25 5 0.727314 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 0 0 0.000000 0.000000 0.000000
LowDoseParameters -5 17 5 0.530932 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -6 10 4 0.425580 0.242858 0 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -7 17 4 0.401714 0.000000 0 0 15.000000 0.000000 0 -0.002815 -0.009652 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -8 30 4 0.727314 0.000000 0 1 15.000000 20.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 0 0 0.000000 0.000000 0.000000
LowDoseParameters -9 18 3 0.421723 0.000000 0 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -12 25 5 0.727314 0.000000 0 0 0.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 0 0 0.000000 0.000000 0.000000
LowDoseParameters -13 24 4 0.519311 0.000000 0 0 0.000000 0.000000 0 1.250267 -0.941544 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -14 24 4 0.498847 0.000000 0 0 0.000000 0.000000 0 1.250267 -0.941544 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseParameters -15 6 4 0.818801 0.000000 0 0 15.000000 0.000000 0 0.000000 0.000000 -999.000000 -999.000000 0.000000 0.000000 1 0 0.000000 0.000000 0.000000
LowDoseViewShift 0.000000 0.000000
LDSearchShift -2.437318 -0.709572
ResetRealignIterationCriterion	0.200000
TiltSeriesLowMagIndex 20 8 24
TiltSeriesFocusSeries	-4. -8.
TiltSeriesExtraExposure	0.25
TiltSeriesFilterSeries	-1,0. 0,30. 40,0.
TiltSeriesVariation 60.000000 1 0 2 0.000000
TiltSeriesVariation 59.099998 1 0 0 0.584000
TiltSeriesVariation 55.599998 1 0 0 0.400000
TiltSeriesVariation 51.599998 1 0 0 0.483000
TiltSeriesVariation 50.000000 1 0 1 0.400000
TiltSeriesVariation 46.900002 1 1 0 0.330000
TiltSeriesVariation 41.200001 1 0 0 0.399000
TiltSeriesVariation 40.000000 1 0 1 0.300000
TiltSeriesVariation 40.000000 1 0 2 -4.000000
TiltSeriesVariation 34.299999 1 0 0 0.220000
TiltSeriesVariation 30.000000 1 1 2 0.070000
TiltSeriesVariation 24.600000 1 0 0 0.330000
TiltSeriesVariation 20.000000 1 0 1 0.200000
TiltSeriesVariation 20.000000 1 1 2 -3.000000
TiltSeriesVariation 10.000000 1 0 2 0.050000
TiltSeriesVariation 0.000000 1 1 0 0.200000
TiltSeriesBidirParams	0 0.000000 1 0 0
TiltSeriesDoseSymParams	1 1 1 9.000000 2 60 0 8.000000 1 4 5.000000 0 1 30
TiltSeriesBDAnchorMags 17 24 9 15 1 31
TiltSeriesRunMacro	0 23 3
TSTermOnHighExposure	1 2.700000
TiltSeriesBidirDimPolicy	1 55 6
CloseValvesDuringMessageBox 1 5.000000
EmailAddress	mast@colorado.edu
TSSetupPanelStates 1 1 1 1 1 1 1
NonGIFMatchPixelIntensity 0 0
GainReferenceTarget 0 1 1100 3 0 4 0 0
ImageXrayCriteria 0 200.000000 15.000000 1
GainReferenceTarget 1 1 1000 10 0 4 0 0
ImageXrayCriteria 1 200.000000 15.000000 1
GainReferenceTarget 2 3 3000 3 0 6 0 0
ImageXrayCriteria 2 200.000000 10.000000 1
GainReferenceTarget 3 1 500 2 0 5 0 0
ImageXrayCriteria 3 200.000000 15.000000 1
GainReferenceTarget 4 1 100 2 0 5 0 1
ImageXrayCriteria 4 200.000000 15.000000 1
ImageXrayCriteria 5 200.000000 15.000000 1
GridMapLimits 0.000000 0.000000 0.000000 0.000000
DErefNumRepeats 3 3 5 5 10 10 2 10 10 10
DErefExposures 2.000000 2.000000 1.500000 1.500000 1.900000 1.000000 1.200000 1.000000 1.000000 1.000000
DElastRefParams 1 1 0 0
FrameAlignParams1 0 0 4 8 0.060000 0.080000 0.100000 0.000000 0 0.142900 0.000000 0 0 0 0 1 12 20
FrameAlignParams2 0 1 3.000000 4 0.100000 0 1 0 0 2 4 1 1 0 1250 0
FrameAliSetName 0 4K default set
FrameAlignParams1 1 0 6 7 0.050000 0.000000 0.000000 0.000000 0 0.142900 0.000000 0 5 0 2 0 15 20
FrameAlignParams2 1 0 0.000000 4 0.100000 0 0 0 0 1 20 2 1 0 1000 0
FrameAliSetName 1 4K default set
FrameAlignParams1 2 1 4 8 0.060000 0.000000 0.000000 0.000000 0 0.142900 0.000000 1 5 0 2 1 15 20
FrameAlignParams2 2 0 0.000000 4 0.100000 0 0 0 0 1 20 0 2 0 1050 0
FrameAliSetName 2 4K default set
FrameAliGlobals 1 0 1 0 0
FalconAliUseGPU 0 1
AlignframesComPath	C:\cygwin\home\mast\oldE\RawFrames\K2
